PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = EmotionRecognitionTestandECR
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Instructions
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to the Geneva Emotional Recognition-Short Experiment. This experiment involves short clips of actors expressing a specific emotion. You will watch the clip and then select which emotion the actor was expressing. You will press the space button once done with the selection to move to the next clip. There will be a total of fourteen emotions to go through.  Press space to begin the experiment. 
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    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ECR_S
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    TextComponent instruction_ecr_s
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      text = Read the following statements on this page and the next, then indicate how much you agree or disagree by selecting a rating for each question. Press "space" to move to the next page.
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    ImageComponent rating_scale
      image = ECR_rating.jpg
      pos = (0.19, 0.35)
      size = (0.88, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent ECR_S_image
      image = ECR-S questions.jpg
      pos = (-0.45, -0.04)
      size = (0.4, 0.65)
      startVal [time (s)] = 0.0
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    SliderComponent q1_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, 0.24)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q2_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, 0.13)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q3_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, 0.02)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q4_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, -0.08)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q5_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, -0.18)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q6_slider
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, -0.3)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ECR_S_2
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    TextComponent instruction_ecr_s_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      text = Read the following statements, then indicate how much you agree or disagree by selecting a rating for each question. Press "space" when you've completed the ratings.
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    ImageComponent rating_scale_2
      image = ECR_rating.jpg
      pos = (0.19, 0.35)
      size = (0.88, 0.08)
      startVal [time (s)] = 0.0
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    ImageComponent ECR_S_image_2
      image = ECR-S questions 2.jpg
      pos = (-0.45, -0.04)
      size = (0.4, 0.65)
      startVal [time (s)] = 0.0
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    SliderComponent q1_slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, 0.24)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q2_slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, 0.13)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q3_slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, 0.02)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q4_slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, -0.08)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q5_slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, -0.18)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    SliderComponent q6_slider_2
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      forceEndRoutine = False
      granularity = 0
      labels = (1, 2, 3, 4, 5, 6, 7)
      letterHeight = 0.015
      pos = (0.2, -0.3)
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp_space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Emotion_recognition_one
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    TextComponent text_prompt
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $text_prompts
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    MovieComponent emotion_recognition
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_link
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine emotion_selection
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    TextComponent text_choice_of_emotion
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = 0.03
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Choosing from the wheel of emotions, please type in the emotion viewed during the previous video.
        Press space once you've typed your selection.
    ImageComponent emotion_wheel
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = GERT-S.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextboxComponent Text_box_response
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.5059, 0.5059, 0.5059
      letterHeight = 0.05
      lineSpacing = 0.05
      placeholder [set every repeat] = Please Type Here...
      pos = (0, -0.35)
      size = (0.7, 0.15)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you for participating in this experiment!
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Flow
  Routine Instructions
  Routine ECR_S
  Routine ECR_S_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = emotions_and_text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text_prompts': 'What emotion is Michael Scott conveying?', 'video_link': 'M_8_MichaelScott_Anxiety.mp4'},
      {'text_prompts': 'What emotion is Michael Scott experiencing?', 'video_link': 'M_11_MichaelScott_sadness.mp4'},
      {'text_prompts': 'What emotion is Michael Scott feeling?', 'video_link': 'M_13_MichaelScott_Irritation.mp4'},
      {'text_prompts': 'What emotion is Michael Scott expressing?', 'video_link': 'M_4_MichaelScott_Pleasure.mp4'},
      {'text_prompts': 'What emotion is Michael Scott conveying?', 'video_link': 'M_6_MichaelScott_Interest.mp4'},
      {'text_prompts': 'What emotion is Michael Scott experiencing?', 'video_link': 'M_1_MichaelScott_Pride.mp4'},
      {'text_prompts': 'What emotion is Michael Scott feeling?', 'video_link': 'M_9_MichaelScott_Fear.mp4'},
      {'text_prompts': 'What emotion is Michael Scott expressing?', 'video_link': 'M_2_MichaelScott_Joy.mp4'},
      {'text_prompts': 'What emotion is Michael Scott conveying?', 'video_link': 'M_3_MichaelScott_Amusement.mp4'},
      {'text_prompts': 'What emotion is Michael Scott experiencing?', 'video_link': 'M_7_MichaelScott_Surprise.mp4'},
      {'text_prompts': 'What emotion is Michael Scott feeling?', 'video_link': 'M_12_MichaelScott_Disgust.mp4'},
      {'text_prompts': 'What emotion is Michael Scott expressing?', 'video_link': 'M_10_MichaelScott_Despair.mp4'},
      {'text_prompts': 'What emotion is Michael Scott conveying?', 'video_link': 'M_14_MichaelScott_Anger.mp4'},
      {'text_prompts': 'What emotion is Michael Scott experiencing?', 'video_link': 'M_5_MichaelScott_Relief.mp4'}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
    Routine Emotion_recognition_one
    Routine emotion_selection
  LoopTerminator trials
  Routine Thank_you
